# Generated by Configurator on Thu Oct 11 12:09:25 PDT 2018

# Reset
Property,Core,Initialize,0

# Devices
Device,COM6,SerialManager,COM6
Device,COM1,SerialManager,COM1
Device,COM5,SerialManager,COM5
Device,COM4,SerialManager,COM4
Device,Right-EMCCD,PVCAM,Camera-1
Device,TIScope,NikonTI,TIScope
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlockBottom,NikonTI,TIFilterBlock1
Device,TIFilterBlockTop,NikonTI,TIFilterBlock2
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,TITIRF,NikonTI,TITIRF
Device,XYStage,ASIStage,XYStage
Device,Excitation,SutterLambda,Wheel-B
Device,Evolve-Filter-Wheel,SutterLambda,Wheel-C
Device,Shutter-A,SutterLambda,Shutter-A
Device,Shutter-B,SutterLambda,Shutter-B
Device,Left-EMCCD,Andor,Andor
Device,CSUW1-Hub,CSUW1,CSUW1-Hub
Device,CSUW1-Filter Wheel,CSUW1,CSUW1-Filter Wheel
Device,CSUW1-Dichroic Mirror,CSUW1,CSUW1-Dichroic Mirror
Device,CSUW1-Shutter,CSUW1,CSUW1-Shutter
Device,CSUW1-Drive Speed,CSUW1,CSUW1-Drive Speed
Device,CSUW1-Bright Field,CSUW1,CSUW1-Bright Field
Device,CSUW1-Aperture,CSUW1,CSUW1-Aperture
Device,CSUW1-Magnifier,CSUW1,CSUW1-Magnifier
Device,TriggerScope-Hub,TriggerScope,TriggerScope-Hub
Device,405 Power,TriggerScope,TriggerScope-DAC01
Device,440 Power,TriggerScope,TriggerScope-DAC02
Device,488 Power,TriggerScope,TriggerScope-DAC03
Device,514 Power,TriggerScope,TriggerScope-DAC04
Device,561 Power,TriggerScope,TriggerScope-DAC05
Device,Line 6DAQ-not used,TriggerScope,TriggerScope-DAC06
Device,405 Shutter,TriggerScope,TriggerScope-TTL01
Device,440 Shutter,TriggerScope,TriggerScope-TTL02
Device,488 Shutter,TriggerScope,TriggerScope-TTL03
Device,514 Shutter,TriggerScope,TriggerScope-TTL04
Device,561 Shutter,TriggerScope,TriggerScope-TTL05
Device,Line 6TTL-not used,TriggerScope,TriggerScope-TTL06
Device,Stream Piezo Z,TriggerScope,TriggerScope-Focus
Device,Port Switcher line 1,TriggerScope,TriggerScope-TTL15
Device,Port Switcher line 2,TriggerScope,TriggerScope-TTL16
Device,Master laser shutter,Utilities,Multi Shutter
Device,Laser 405 Shutter,Utilities,State Device Shutter
Device,Laser 440 Shutter,Utilities,State Device Shutter
Device,Laser 488 Shutter,Utilities,State Device Shutter
Device,Laser 514 Shutter,Utilities,State Device Shutter
Device,Laser 561 Shutter,Utilities,State Device Shutter

# Pre-init settings for devices
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,128000
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,115200
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,57600
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,XYStage,Port,COM4
Property,Excitation,Port,COM6
Property,Excitation,Timeout(ms),500
Property,Evolve-Filter-Wheel,Port,COM6
Property,Evolve-Filter-Wheel,Timeout(ms),500
Property,Shutter-A,Port,COM6
Property,Shutter-B,Port,COM6
Property,CSUW1-Hub,Port,COM1
Property,CSUW1-Filter Wheel,WheelNumber,1
Property,CSUW1-Magnifier,MagnifierNumber,1
Property,TriggerScope-Hub,Port,COM5
Property,Stream Piezo Z,Lower Limit,-75.0000
Property,Stream Piezo Z,Upper Limit,75.0000

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TINosePiece,TIScope
Parent,TIFilterBlockBottom,TIScope
Parent,TIFilterBlockTop,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope
Parent,TITIRF,TIScope
Parent,405 Power,TriggerScope-Hub
Parent,440 Power,TriggerScope-Hub
Parent,488 Power,TriggerScope-Hub
Parent,514 Power,TriggerScope-Hub
Parent,561 Power,TriggerScope-Hub
Parent,Line 6DAQ-not used,TriggerScope-Hub
Parent,405 Shutter,TriggerScope-Hub
Parent,440 Shutter,TriggerScope-Hub
Parent,488 Shutter,TriggerScope-Hub
Parent,514 Shutter,TriggerScope-Hub
Parent,561 Shutter,TriggerScope-Hub
Parent,Line 6TTL-not used,TriggerScope-Hub
Parent,Stream Piezo Z,TriggerScope-Hub
Parent,Port Switcher line 1,TriggerScope-Hub
Parent,Port Switcher line 2,TriggerScope-Hub

# Initialize
Property,Core,Initialize,1

# Delays
Delay,TINosePiece,200.0
Delay,TIFilterBlockBottom,200.0
Delay,TIFilterBlockTop,200.0
Delay,TILightPath,500.0
Delay,561 Shutter,10.0

# Focus directions
FocusDirection,TIZDrive,0
FocusDirection,TIPFSOffset,0
FocusDirection,Stream Piezo Z,0

# Roles
Property,Core,Camera,Left-EMCCD
Property,Core,Shutter,Master laser shutter
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Plan Apo 60x NA 1.40 Oil
Label,TINosePiece,4,5-Apo TIRF 100x NA 1.49 Oil
Label,TINosePiece,3,4-Apo TIRF 60x NA 1.49 Oil
Label,TINosePiece,2,3-Plan Fluor 20x NA 0.5 Dry
Label,TINosePiece,1,2-Plan Apo 20x NA 0.75 Dry
Label,TINosePiece,0,1-Plan Fluor 10x NA 0.30 Dry
# TIFilterBlockBottom
Label,TIFilterBlockBottom,5,6------
Label,TIFilterBlockBottom,4,5------
Label,TIFilterBlockBottom,3,4 - 440/514/561 TIRF
Label,TIFilterBlockBottom,2,3 - 405/488/560/650  TIRF
Label,TIFilterBlockBottom,1,2 - 405 TIRF
Label,TIFilterBlockBottom,0,1 - Analyzer
# TIFilterBlockTop
Label,TIFilterBlockTop,5,6 - 600 LP
Label,TIFilterBlockTop,4,5 - 488/561/650/750
Label,TIFilterBlockTop,3,4------
Label,TIFilterBlockTop,2,3------
Label,TIFilterBlockTop,1,2 - 561
Label,TIFilterBlockTop,0,1 - 488
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100
# Excitation
Label,Excitation,9,500/20
Label,Excitation,8,430/24
Label,Excitation,7,FULL
Label,Excitation,6,572/35
Label,Excitation,5,470/40
Label,Excitation,4,FULL
Label,Excitation,3,FULL
Label,Excitation,2,350/20
Label,Excitation,1,EMPTY
Label,Excitation,0,650/20
# Evolve-Filter-Wheel
Label,Evolve-Filter-Wheel,9,625 SP
Label,Evolve-Filter-Wheel,8,750/60
Label,Evolve-Filter-Wheel,7,632/60
Label,Evolve-Filter-Wheel,6,525/50
Label,Evolve-Filter-Wheel,5,535/30
Label,Evolve-Filter-Wheel,4,470/24
Label,Evolve-Filter-Wheel,3,NOTCH 405/488/561/635
Label,Evolve-Filter-Wheel,2,480/40
Label,Evolve-Filter-Wheel,1,ANALYYZER
Label,Evolve-Filter-Wheel,0,EMPTY
# CSUW1-Filter Wheel
Label,CSUW1-Filter Wheel,9,FULL
Label,CSUW1-Filter Wheel,8,405/488/561/635
Label,CSUW1-Filter Wheel,7,442/514/568
Label,CSUW1-Filter Wheel,6,FULL
Label,CSUW1-Filter Wheel,5,EMPTY
Label,CSUW1-Filter Wheel,4,620/60
Label,CSUW1-Filter Wheel,3,535/30
Label,CSUW1-Filter Wheel,2,525/50
Label,CSUW1-Filter Wheel,1,480/40
Label,CSUW1-Filter Wheel,0,450/50
# CSUW1-Dichroic Mirror
Label,CSUW1-Dichroic Mirror,2,BRIGHTFIELD
Label,CSUW1-Dichroic Mirror,1,TRIPLE
Label,CSUW1-Dichroic Mirror,0,QUAD
# CSUW1-Bright Field
Label,CSUW1-Bright Field,1,Bright Field
Label,CSUW1-Bright Field,0,Confocal

# Configuration presets
# Group: ________Right Emission Wheel
# Preset: 480-40
ConfigGroup,________Right Emission Wheel,480-40,Evolve-Filter-Wheel,Label,480/40

# Preset: 525-50
ConfigGroup,________Right Emission Wheel,525-50,Evolve-Filter-Wheel,Label,525/50

# Preset: EMPTY
ConfigGroup,________Right Emission Wheel,EMPTY,Evolve-Filter-Wheel,Label,EMPTY

# Preset: FULL
ConfigGroup,________Right Emission Wheel,FULL,Evolve-Filter-Wheel,Label,FULL

# Preset: 470-24
ConfigGroup,________Right Emission Wheel,470-24,Evolve-Filter-Wheel,Label,470/24

# Preset: ANALYYZER
ConfigGroup,________Right Emission Wheel,ANALYYZER,Evolve-Filter-Wheel,Label,ANALYYZER

# Preset: 535-30
ConfigGroup,________Right Emission Wheel,535-30,Evolve-Filter-Wheel,Label,535/30

# Preset: 632-60
ConfigGroup,________Right Emission Wheel,632-60,Evolve-Filter-Wheel,Label,632/60

# Preset: 625 SP
ConfigGroup,________Right Emission Wheel,625 SP,Evolve-Filter-Wheel,Label,625 SP

# Preset: NOTCH 405-488-561-635
ConfigGroup,________Right Emission Wheel,NOTCH 405-488-561-635,Evolve-Filter-Wheel,Label,NOTCH 405/488/561/635


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Laser 405 Shutter,State Device,405 Shutter
ConfigGroup,System,Startup,Laser 440 Shutter,State Device,440 Shutter
ConfigGroup,System,Startup,Laser 488 Shutter,State Device,488 Shutter
ConfigGroup,System,Startup,Laser 514 Shutter,State Device,514 Shutter
ConfigGroup,System,Startup,Laser 561 Shutter,State Device,561 Shutter
ConfigGroup,System,Startup,405 Power,Volts,3.0000
ConfigGroup,System,Startup,440 Power,Volts,3.0000
ConfigGroup,System,Startup,488 Power,Volts,3.0000
ConfigGroup,System,Startup,514 Power,Volts,3.0000
ConfigGroup,System,Startup,561 Power,Volts,3.0000
ConfigGroup,System,Startup,Left-EMCCD,VerticalClockVoltage,Normal
ConfigGroup,System,Startup,Left-EMCCD,VerticalSpeed,1.13
ConfigGroup,System,Startup,CSUW1-Shutter,State,Open
ConfigGroup,System,Startup,Left-EMCCD,FrameTransfer,On


# Group: _Channels_TIRF
# Preset: TIRF 561 Evolve
ConfigGroup,_Channels_TIRF,TIRF 561 Evolve,TIFilterBlockBottom,Label,4 - 440/514/561 TIRF
ConfigGroup,_Channels_TIRF,TIRF 561 Evolve,TIFilterBlockTop,Label,1 - 488
ConfigGroup,_Channels_TIRF,TIRF 561 Evolve,TILightPath,Label,3-Right100
ConfigGroup,_Channels_TIRF,TIRF 561 Evolve,TITIRF,Mirror,In
ConfigGroup,_Channels_TIRF,TIRF 561 Evolve,CSUW1-Filter Wheel,Label,620/60
ConfigGroup,_Channels_TIRF,TIRF 561 Evolve,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channels_TIRF,TIRF 561 Evolve,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channels_TIRF,TIRF 561 Evolve,Port Switcher line 1,State,0
ConfigGroup,_Channels_TIRF,TIRF 561 Evolve,Port Switcher line 2,State,0
ConfigGroup,_Channels_TIRF,TIRF 561 Evolve,Core,Camera,Right-EMCCD
ConfigGroup,_Channels_TIRF,TIRF 561 Evolve,Core,Shutter,Laser 561 Shutter
ConfigGroup,_Channels_TIRF,TIRF 561 Evolve,Evolve-Filter-Wheel,Label,632/60
ConfigGroup,_Channels_TIRF,TIRF 561 Evolve,Excitation,Label,572/35

# Preset: 561 TIRF left
ConfigGroup,_Channels_TIRF,561 TIRF left,TIFilterBlockBottom,Label,4 - 440/514/561 TIRF
ConfigGroup,_Channels_TIRF,561 TIRF left,TIFilterBlockTop,Label,1 - 488
ConfigGroup,_Channels_TIRF,561 TIRF left,TILightPath,Label,2-Left100
ConfigGroup,_Channels_TIRF,561 TIRF left,TITIRF,Mirror,In
ConfigGroup,_Channels_TIRF,561 TIRF left,Port Switcher line 1,State,0
ConfigGroup,_Channels_TIRF,561 TIRF left,Port Switcher line 2,State,0
ConfigGroup,_Channels_TIRF,561 TIRF left,Core,Camera,Left-EMCCD
ConfigGroup,_Channels_TIRF,561 TIRF left,CSUW1-Filter Wheel,Label,620/60
ConfigGroup,_Channels_TIRF,561 TIRF left,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channels_TIRF,561 TIRF left,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channels_TIRF,561 TIRF left,Core,Shutter,Laser 561 Shutter
ConfigGroup,_Channels_TIRF,561 TIRF left,Evolve-Filter-Wheel,Label,EMPTY
ConfigGroup,_Channels_TIRF,561 TIRF left,Excitation,Label,572/35

# Preset: TIRF 488 Evolve
ConfigGroup,_Channels_TIRF,TIRF 488 Evolve,TIFilterBlockBottom,Label,3 - 405/488/560/650  TIRF
ConfigGroup,_Channels_TIRF,TIRF 488 Evolve,TIFilterBlockTop,Label,3------
ConfigGroup,_Channels_TIRF,TIRF 488 Evolve,TILightPath,Label,3-Right100
ConfigGroup,_Channels_TIRF,TIRF 488 Evolve,TITIRF,Mirror,In
ConfigGroup,_Channels_TIRF,TIRF 488 Evolve,Evolve-Filter-Wheel,Label,525/50
ConfigGroup,_Channels_TIRF,TIRF 488 Evolve,CSUW1-Filter Wheel,Label,405/488/561/635
ConfigGroup,_Channels_TIRF,TIRF 488 Evolve,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channels_TIRF,TIRF 488 Evolve,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channels_TIRF,TIRF 488 Evolve,Port Switcher line 1,State,0
ConfigGroup,_Channels_TIRF,TIRF 488 Evolve,Port Switcher line 2,State,0
ConfigGroup,_Channels_TIRF,TIRF 488 Evolve,Core,Camera,Right-EMCCD
ConfigGroup,_Channels_TIRF,TIRF 488 Evolve,Core,Shutter,Laser 488 Shutter
ConfigGroup,_Channels_TIRF,TIRF 488 Evolve,Excitation,Label,572/35

# Preset: 405 TIRF left
ConfigGroup,_Channels_TIRF,405 TIRF left,TIFilterBlockBottom,Label,3 - 405/488/560/650  TIRF
ConfigGroup,_Channels_TIRF,405 TIRF left,TIFilterBlockTop,Label,4------
ConfigGroup,_Channels_TIRF,405 TIRF left,TILightPath,Label,2-Left100
ConfigGroup,_Channels_TIRF,405 TIRF left,TITIRF,Mirror,In
ConfigGroup,_Channels_TIRF,405 TIRF left,Port Switcher line 1,State,0
ConfigGroup,_Channels_TIRF,405 TIRF left,Port Switcher line 2,State,0
ConfigGroup,_Channels_TIRF,405 TIRF left,Core,Camera,Left-EMCCD
ConfigGroup,_Channels_TIRF,405 TIRF left,CSUW1-Filter Wheel,Label,405/488/561/635
ConfigGroup,_Channels_TIRF,405 TIRF left,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channels_TIRF,405 TIRF left,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channels_TIRF,405 TIRF left,Core,Shutter,Laser 405 Shutter
ConfigGroup,_Channels_TIRF,405 TIRF left,Evolve-Filter-Wheel,Label,EMPTY
ConfigGroup,_Channels_TIRF,405 TIRF left,Excitation,Label,572/35

# Preset: 488 TIRF left
ConfigGroup,_Channels_TIRF,488 TIRF left,TIFilterBlockBottom,Label,3 - 405/488/560/650  TIRF
ConfigGroup,_Channels_TIRF,488 TIRF left,TIFilterBlockTop,Label,3------
ConfigGroup,_Channels_TIRF,488 TIRF left,TILightPath,Label,2-Left100
ConfigGroup,_Channels_TIRF,488 TIRF left,TITIRF,Mirror,In
ConfigGroup,_Channels_TIRF,488 TIRF left,Port Switcher line 1,State,0
ConfigGroup,_Channels_TIRF,488 TIRF left,Port Switcher line 2,State,0
ConfigGroup,_Channels_TIRF,488 TIRF left,Core,Camera,Left-EMCCD
ConfigGroup,_Channels_TIRF,488 TIRF left,CSUW1-Filter Wheel,Label,405/488/561/635
ConfigGroup,_Channels_TIRF,488 TIRF left,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channels_TIRF,488 TIRF left,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channels_TIRF,488 TIRF left,Core,Shutter,Laser 488 Shutter
ConfigGroup,_Channels_TIRF,488 TIRF left,Evolve-Filter-Wheel,Label,470/24
ConfigGroup,_Channels_TIRF,488 TIRF left,Excitation,Label,FULL

# Preset: TIRF DIA
ConfigGroup,_Channels_TIRF,TIRF DIA,TIFilterBlockBottom,Label,6------
ConfigGroup,_Channels_TIRF,TIRF DIA,TIFilterBlockTop,Label,1 - 488
ConfigGroup,_Channels_TIRF,TIRF DIA,TILightPath,Label,2-Left100
ConfigGroup,_Channels_TIRF,TIRF DIA,TITIRF,Mirror,In
ConfigGroup,_Channels_TIRF,TIRF DIA,Evolve-Filter-Wheel,Label,EMPTY
ConfigGroup,_Channels_TIRF,TIRF DIA,CSUW1-Filter Wheel,Label,EMPTY
ConfigGroup,_Channels_TIRF,TIRF DIA,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channels_TIRF,TIRF DIA,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channels_TIRF,TIRF DIA,Port Switcher line 1,State,0
ConfigGroup,_Channels_TIRF,TIRF DIA,Port Switcher line 2,State,0
ConfigGroup,_Channels_TIRF,TIRF DIA,Core,Camera,Left-EMCCD
ConfigGroup,_Channels_TIRF,TIRF DIA,Core,Shutter,Shutter-A
ConfigGroup,_Channels_TIRF,TIRF DIA,Excitation,Label,572/35

# Preset: RICM
ConfigGroup,_Channels_TIRF,RICM,TIFilterBlockBottom,Label,5------
ConfigGroup,_Channels_TIRF,RICM,TIFilterBlockTop,Label,1 - 488
ConfigGroup,_Channels_TIRF,RICM,TILightPath,Label,2-Left100
ConfigGroup,_Channels_TIRF,RICM,TITIRF,Mirror,Out
ConfigGroup,_Channels_TIRF,RICM,Evolve-Filter-Wheel,Label,EMPTY
ConfigGroup,_Channels_TIRF,RICM,CSUW1-Filter Wheel,Label,EMPTY
ConfigGroup,_Channels_TIRF,RICM,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channels_TIRF,RICM,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channels_TIRF,RICM,Port Switcher line 1,State,0
ConfigGroup,_Channels_TIRF,RICM,Port Switcher line 2,State,0
ConfigGroup,_Channels_TIRF,RICM,Core,Camera,Left-EMCCD
ConfigGroup,_Channels_TIRF,RICM,Core,Shutter,Shutter-B
ConfigGroup,_Channels_TIRF,RICM,Excitation,Label,572/35

# Preset: 561 TIRF 488out
ConfigGroup,_Channels_TIRF,561 TIRF 488out,TIFilterBlockBottom,Label,4 - 440/514/561 TIRF
ConfigGroup,_Channels_TIRF,561 TIRF 488out,TIFilterBlockTop,Label,4------
ConfigGroup,_Channels_TIRF,561 TIRF 488out,TILightPath,Label,2-Left100
ConfigGroup,_Channels_TIRF,561 TIRF 488out,TITIRF,Mirror,In
ConfigGroup,_Channels_TIRF,561 TIRF 488out,Evolve-Filter-Wheel,Label,EMPTY
ConfigGroup,_Channels_TIRF,561 TIRF 488out,CSUW1-Filter Wheel,Label,620/60
ConfigGroup,_Channels_TIRF,561 TIRF 488out,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channels_TIRF,561 TIRF 488out,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channels_TIRF,561 TIRF 488out,Port Switcher line 1,State,0
ConfigGroup,_Channels_TIRF,561 TIRF 488out,Port Switcher line 2,State,0
ConfigGroup,_Channels_TIRF,561 TIRF 488out,Core,Camera,Left-EMCCD
ConfigGroup,_Channels_TIRF,561 TIRF 488out,Core,Shutter,Laser 561 Shutter
ConfigGroup,_Channels_TIRF,561 TIRF 488out,Excitation,Label,572/35

# Preset: 514 TIRF left
ConfigGroup,_Channels_TIRF,514 TIRF left,TIFilterBlockBottom,Label,4 - 440/514/561 TIRF
ConfigGroup,_Channels_TIRF,514 TIRF left,TIFilterBlockTop,Label,3------
ConfigGroup,_Channels_TIRF,514 TIRF left,TILightPath,Label,2-Left100
ConfigGroup,_Channels_TIRF,514 TIRF left,TITIRF,Mirror,In
ConfigGroup,_Channels_TIRF,514 TIRF left,Port Switcher line 1,State,0
ConfigGroup,_Channels_TIRF,514 TIRF left,Port Switcher line 2,State,0
ConfigGroup,_Channels_TIRF,514 TIRF left,Core,Camera,Left-EMCCD
ConfigGroup,_Channels_TIRF,514 TIRF left,CSUW1-Filter Wheel,Label,442/514/568
ConfigGroup,_Channels_TIRF,514 TIRF left,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channels_TIRF,514 TIRF left,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channels_TIRF,514 TIRF left,Core,Shutter,Laser 514 Shutter
ConfigGroup,_Channels_TIRF,514 TIRF left,Evolve-Filter-Wheel,Label,EMPTY
ConfigGroup,_Channels_TIRF,514 TIRF left,Excitation,Label,572/35


# Group: _Channel_FRAP
# Preset: FRAP 561
ConfigGroup,_Channel_FRAP,FRAP 561,TIFilterBlockBottom,Label,5------
ConfigGroup,_Channel_FRAP,FRAP 561,TIFilterBlockTop,Label,2 - 561
ConfigGroup,_Channel_FRAP,FRAP 561,TILightPath,Label,1-Eye100
ConfigGroup,_Channel_FRAP,FRAP 561,TITIRF,Mirror,Out
ConfigGroup,_Channel_FRAP,FRAP 561,Excitation,Label,650/20
ConfigGroup,_Channel_FRAP,FRAP 561,Evolve-Filter-Wheel,Label,470/24
ConfigGroup,_Channel_FRAP,FRAP 561,CSUW1-Filter Wheel,Label,FULL
ConfigGroup,_Channel_FRAP,FRAP 561,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_Channel_FRAP,FRAP 561,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channel_FRAP,FRAP 561,Port Switcher line 1,State,0
ConfigGroup,_Channel_FRAP,FRAP 561,Port Switcher line 2,State,1
ConfigGroup,_Channel_FRAP,FRAP 561,Core,Shutter,Laser 561 Shutter
ConfigGroup,_Channel_FRAP,FRAP 561,Core,Camera,Left-EMCCD

# Preset: FRAP 488
ConfigGroup,_Channel_FRAP,FRAP 488,TIFilterBlockBottom,Label,1 - Analyzer
ConfigGroup,_Channel_FRAP,FRAP 488,TIFilterBlockTop,Label,1 - 488
ConfigGroup,_Channel_FRAP,FRAP 488,TILightPath,Label,2-Left100
ConfigGroup,_Channel_FRAP,FRAP 488,TITIRF,Mirror,Out
ConfigGroup,_Channel_FRAP,FRAP 488,Excitation,Label,650/20
ConfigGroup,_Channel_FRAP,FRAP 488,Evolve-Filter-Wheel,Label,470/24
ConfigGroup,_Channel_FRAP,FRAP 488,CSUW1-Filter Wheel,Label,FULL
ConfigGroup,_Channel_FRAP,FRAP 488,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channel_FRAP,FRAP 488,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channel_FRAP,FRAP 488,Port Switcher line 1,State,0
ConfigGroup,_Channel_FRAP,FRAP 488,Port Switcher line 2,State,1
ConfigGroup,_Channel_FRAP,FRAP 488,Core,Shutter,Laser 488 Shutter
ConfigGroup,_Channel_FRAP,FRAP 488,Core,Camera,Left-EMCCD


# Group: _____Laser_Port
# Preset: TIRF
ConfigGroup,_____Laser_Port,TIRF,Port Switcher line 1,State,0
ConfigGroup,_____Laser_Port,TIRF,Port Switcher line 2,State,0

# Preset: CONFOCAL
ConfigGroup,_____Laser_Port,CONFOCAL,Port Switcher line 1,State,1
ConfigGroup,_____Laser_Port,CONFOCAL,Port Switcher line 2,State,1

# Preset: FRAP
ConfigGroup,_____Laser_Port,FRAP,Port Switcher line 1,State,0
ConfigGroup,_____Laser_Port,FRAP,Port Switcher line 2,State,1


# Group: _____MAG Changer
# Preset: 2X
ConfigGroup,_____MAG Changer,2X,CSUW1-Magnifier,Label,Magnifier-2
ConfigGroup,_____MAG Changer,2X,Core,Camera,Left-EMCCD

# Preset: 1X
ConfigGroup,_____MAG Changer,1X,CSUW1-Magnifier,Label,Magnifier-1
ConfigGroup,_____MAG Changer,1X,Core,Camera,Left-EMCCD


# Group: ___488 Laser Power
# Preset: NewPreset
ConfigGroup,___488 Laser Power,NewPreset,488 Power,Volts,7.4900


# Group: __ANDOR-Cam_EM_Gain
# Preset: NewPreset
ConfigGroup,__ANDOR-Cam_EM_Gain,NewPreset,Left-EMCCD,Gain,223


# Group: ____TIRF Angle
# Preset: NewPreset
ConfigGroup,____TIRF Angle,NewPreset,TITIRF,Position,0

# Group: __________PFS status
# Preset: On
ConfigGroup,__________PFS status,On,TIPFSStatus,State,On

# Preset: Off
ConfigGroup,__________PFS status,Off,TIPFSStatus,State,Off

# Group: __EVOLVE-Cam-EM_Gain
# Preset: NewPreset
ConfigGroup,__EVOLVE-Cam-EM_Gain,NewPreset,Right-EMCCD,MultiplierGain,1


# Group: _Channel_EPI
# Preset: DIA right
ConfigGroup,_Channel_EPI,DIA right,TIFilterBlockBottom,Label,1 - Analyzer
ConfigGroup,_Channel_EPI,DIA right,TIFilterBlockTop,Label,6 - 600 LP
ConfigGroup,_Channel_EPI,DIA right,TILightPath,Label,3-Right100
ConfigGroup,_Channel_EPI,DIA right,TITIRF,Mirror,Out
ConfigGroup,_Channel_EPI,DIA right,Excitation,Label,EMPTY
ConfigGroup,_Channel_EPI,DIA right,Evolve-Filter-Wheel,Label,ANALYYZER
ConfigGroup,_Channel_EPI,DIA right,CSUW1-Filter Wheel,Label,EMPTY
ConfigGroup,_Channel_EPI,DIA right,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channel_EPI,DIA right,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channel_EPI,DIA right,Core,Camera,Right-EMCCD
ConfigGroup,_Channel_EPI,DIA right,Core,Focus,TIZDrive
ConfigGroup,_Channel_EPI,DIA right,Core,Shutter,Shutter-A
ConfigGroup,_Channel_EPI,DIA right,Left-EMCCD,Gain,2

# Preset: EPI RFP
ConfigGroup,_Channel_EPI,EPI RFP,TIFilterBlockBottom,Label,3 - 405/488/560/650  TIRF
ConfigGroup,_Channel_EPI,EPI RFP,TIFilterBlockTop,Label,3------
ConfigGroup,_Channel_EPI,EPI RFP,TITIRF,Mirror,Out
ConfigGroup,_Channel_EPI,EPI RFP,Excitation,Label,572/35
ConfigGroup,_Channel_EPI,EPI RFP,Core,Camera,Left-EMCCD
ConfigGroup,_Channel_EPI,EPI RFP,Core,Focus,TIPFSOffset
ConfigGroup,_Channel_EPI,EPI RFP,Core,Shutter,Shutter-B
ConfigGroup,_Channel_EPI,EPI RFP,TILightPath,Label,2-Left100
ConfigGroup,_Channel_EPI,EPI RFP,CSUW1-Filter Wheel,Label,620/60
ConfigGroup,_Channel_EPI,EPI RFP,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channel_EPI,EPI RFP,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channel_EPI,EPI RFP,Evolve-Filter-Wheel,Label,ANALYYZER
ConfigGroup,_Channel_EPI,EPI RFP,Left-EMCCD,Gain,100

# Preset: EPI Cy5
ConfigGroup,_Channel_EPI,EPI Cy5,TIFilterBlockBottom,Label,5------
ConfigGroup,_Channel_EPI,EPI Cy5,TIFilterBlockTop,Label,3------
ConfigGroup,_Channel_EPI,EPI Cy5,TILightPath,Label,3-Right100
ConfigGroup,_Channel_EPI,EPI Cy5,TITIRF,Mirror,Out
ConfigGroup,_Channel_EPI,EPI Cy5,Excitation,Label,EMPTY
ConfigGroup,_Channel_EPI,EPI Cy5,CSUW1-Filter Wheel,Label,EMPTY
ConfigGroup,_Channel_EPI,EPI Cy5,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channel_EPI,EPI Cy5,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channel_EPI,EPI Cy5,Core,Camera,Right-EMCCD
ConfigGroup,_Channel_EPI,EPI Cy5,Core,Focus,TIZDrive
ConfigGroup,_Channel_EPI,EPI Cy5,Core,Shutter,Shutter-B
ConfigGroup,_Channel_EPI,EPI Cy5,Evolve-Filter-Wheel,Label,ANALYYZER
ConfigGroup,_Channel_EPI,EPI Cy5,Left-EMCCD,Gain,2

# Preset: EPI Cy3 Cy5 FRET
ConfigGroup,_Channel_EPI,EPI Cy3 Cy5 FRET,TIFilterBlockBottom,Label,3 - 405/488/560/650  TIRF
ConfigGroup,_Channel_EPI,EPI Cy3 Cy5 FRET,TIFilterBlockTop,Label,3------
ConfigGroup,_Channel_EPI,EPI Cy3 Cy5 FRET,TILightPath,Label,3-Right100
ConfigGroup,_Channel_EPI,EPI Cy3 Cy5 FRET,TITIRF,Mirror,Out
ConfigGroup,_Channel_EPI,EPI Cy3 Cy5 FRET,Excitation,Label,572/35
ConfigGroup,_Channel_EPI,EPI Cy3 Cy5 FRET,Evolve-Filter-Wheel,Label,ANALYYZER
ConfigGroup,_Channel_EPI,EPI Cy3 Cy5 FRET,CSUW1-Filter Wheel,Label,EMPTY
ConfigGroup,_Channel_EPI,EPI Cy3 Cy5 FRET,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channel_EPI,EPI Cy3 Cy5 FRET,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channel_EPI,EPI Cy3 Cy5 FRET,Core,Camera,Right-EMCCD
ConfigGroup,_Channel_EPI,EPI Cy3 Cy5 FRET,Core,Focus,TIZDrive
ConfigGroup,_Channel_EPI,EPI Cy3 Cy5 FRET,Core,Shutter,Shutter-B
ConfigGroup,_Channel_EPI,EPI Cy3 Cy5 FRET,Left-EMCCD,Gain,2

# Preset: YFP
ConfigGroup,_Channel_EPI,YFP,TIFilterBlockBottom,Label,4 - 440/514/561 TIRF
ConfigGroup,_Channel_EPI,YFP,TIFilterBlockTop,Label,3------
ConfigGroup,_Channel_EPI,YFP,TILightPath,Label,2-Left100
ConfigGroup,_Channel_EPI,YFP,TITIRF,Mirror,Out
ConfigGroup,_Channel_EPI,YFP,Excitation,Label,500/20
ConfigGroup,_Channel_EPI,YFP,CSUW1-Filter Wheel,Label,535/30
ConfigGroup,_Channel_EPI,YFP,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channel_EPI,YFP,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channel_EPI,YFP,Core,Camera,Left-EMCCD
ConfigGroup,_Channel_EPI,YFP,Core,Focus,TIZDrive
ConfigGroup,_Channel_EPI,YFP,Core,Shutter,Shutter-B
ConfigGroup,_Channel_EPI,YFP,Evolve-Filter-Wheel,Label,ANALYYZER
ConfigGroup,_Channel_EPI,YFP,Left-EMCCD,Gain,2

# Preset: EPI BLUE LED
ConfigGroup,_Channel_EPI,EPI BLUE LED,TIFilterBlockBottom,Label,6------
ConfigGroup,_Channel_EPI,EPI BLUE LED,TIFilterBlockTop,Label,5 - 488/561/650/750
ConfigGroup,_Channel_EPI,EPI BLUE LED,TILightPath,Label,2-Left100
ConfigGroup,_Channel_EPI,EPI BLUE LED,TITIRF,Mirror,Out
ConfigGroup,_Channel_EPI,EPI BLUE LED,Excitation,Label,FULL
ConfigGroup,_Channel_EPI,EPI BLUE LED,Core,Camera,Left-EMCCD
ConfigGroup,_Channel_EPI,EPI BLUE LED,Core,Focus,TIZDrive
ConfigGroup,_Channel_EPI,EPI BLUE LED,Core,Shutter,Shutter-B
ConfigGroup,_Channel_EPI,EPI BLUE LED,CSUW1-Filter Wheel,Label,FULL
ConfigGroup,_Channel_EPI,EPI BLUE LED,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channel_EPI,EPI BLUE LED,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channel_EPI,EPI BLUE LED,Evolve-Filter-Wheel,Label,ANALYYZER
ConfigGroup,_Channel_EPI,EPI BLUE LED,Left-EMCCD,Gain,2

# Preset: DIA
ConfigGroup,_Channel_EPI,DIA,TIFilterBlockBottom,Label,1 - Analyzer
ConfigGroup,_Channel_EPI,DIA,TIFilterBlockTop,Label,6 - 600 LP
ConfigGroup,_Channel_EPI,DIA,TITIRF,Mirror,Out
ConfigGroup,_Channel_EPI,DIA,Excitation,Label,EMPTY
ConfigGroup,_Channel_EPI,DIA,Core,Camera,Left-EMCCD
ConfigGroup,_Channel_EPI,DIA,Core,Focus,TIZDrive
ConfigGroup,_Channel_EPI,DIA,Core,Shutter,Shutter-A
ConfigGroup,_Channel_EPI,DIA,TILightPath,Label,2-Left100
ConfigGroup,_Channel_EPI,DIA,CSUW1-Filter Wheel,Label,525/50
ConfigGroup,_Channel_EPI,DIA,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channel_EPI,DIA,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channel_EPI,DIA,Evolve-Filter-Wheel,Label,ANALYYZER
ConfigGroup,_Channel_EPI,DIA,Left-EMCCD,Gain,2

# Preset: EPI-SQ-FITC
ConfigGroup,_Channel_EPI,EPI-SQ-FITC,TIFilterBlockBottom,Label,6------
ConfigGroup,_Channel_EPI,EPI-SQ-FITC,TIFilterBlockTop,Label,3------
ConfigGroup,_Channel_EPI,EPI-SQ-FITC,TILightPath,Label,2-Left100
ConfigGroup,_Channel_EPI,EPI-SQ-FITC,TITIRF,Mirror,Out
ConfigGroup,_Channel_EPI,EPI-SQ-FITC,Excitation,Label,470/40
ConfigGroup,_Channel_EPI,EPI-SQ-FITC,Evolve-Filter-Wheel,Label,ANALYYZER
ConfigGroup,_Channel_EPI,EPI-SQ-FITC,CSUW1-Filter Wheel,Label,525/50
ConfigGroup,_Channel_EPI,EPI-SQ-FITC,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channel_EPI,EPI-SQ-FITC,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channel_EPI,EPI-SQ-FITC,Core,Camera,Left-EMCCD
ConfigGroup,_Channel_EPI,EPI-SQ-FITC,Core,Focus,TIZDrive
ConfigGroup,_Channel_EPI,EPI-SQ-FITC,Core,Shutter,Shutter-B
ConfigGroup,_Channel_EPI,EPI-SQ-FITC,Left-EMCCD,Gain,250

# Preset: EPI BFP
ConfigGroup,_Channel_EPI,EPI BFP,TIFilterBlockBottom,Label,2 - 405 TIRF
ConfigGroup,_Channel_EPI,EPI BFP,TIFilterBlockTop,Label,3------
ConfigGroup,_Channel_EPI,EPI BFP,TITIRF,Mirror,Out
ConfigGroup,_Channel_EPI,EPI BFP,Excitation,Label,EMPTY
ConfigGroup,_Channel_EPI,EPI BFP,Core,Camera,Left-EMCCD
ConfigGroup,_Channel_EPI,EPI BFP,Core,Focus,TIZDrive
ConfigGroup,_Channel_EPI,EPI BFP,Core,Shutter,Shutter-B
ConfigGroup,_Channel_EPI,EPI BFP,TILightPath,Label,2-Left100
ConfigGroup,_Channel_EPI,EPI BFP,CSUW1-Filter Wheel,Label,EMPTY
ConfigGroup,_Channel_EPI,EPI BFP,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channel_EPI,EPI BFP,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channel_EPI,EPI BFP,Evolve-Filter-Wheel,Label,ANALYYZER
ConfigGroup,_Channel_EPI,EPI BFP,Left-EMCCD,Gain,2

# Preset: EPI GFP
ConfigGroup,_Channel_EPI,EPI GFP,TIFilterBlockBottom,Label,3 - 405/488/560/650  TIRF
ConfigGroup,_Channel_EPI,EPI GFP,TIFilterBlockTop,Label,3------
ConfigGroup,_Channel_EPI,EPI GFP,TITIRF,Mirror,Out
ConfigGroup,_Channel_EPI,EPI GFP,Excitation,Label,470/40
ConfigGroup,_Channel_EPI,EPI GFP,Core,Camera,Left-EMCCD
ConfigGroup,_Channel_EPI,EPI GFP,Core,Focus,TIZDrive
ConfigGroup,_Channel_EPI,EPI GFP,Core,Shutter,Shutter-B
ConfigGroup,_Channel_EPI,EPI GFP,TILightPath,Label,2-Left100
ConfigGroup,_Channel_EPI,EPI GFP,CSUW1-Filter Wheel,Label,525/50
ConfigGroup,_Channel_EPI,EPI GFP,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channel_EPI,EPI GFP,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channel_EPI,EPI GFP,Evolve-Filter-Wheel,Label,ANALYYZER
ConfigGroup,_Channel_EPI,EPI GFP,Left-EMCCD,Gain,200

# Preset: RICM tests
ConfigGroup,_Channel_EPI,RICM tests,TIFilterBlockBottom,Label,6------
ConfigGroup,_Channel_EPI,RICM tests,TIFilterBlockTop,Label,3------
ConfigGroup,_Channel_EPI,RICM tests,TILightPath,Label,2-Left100
ConfigGroup,_Channel_EPI,RICM tests,TITIRF,Mirror,Out
ConfigGroup,_Channel_EPI,RICM tests,Excitation,Label,572/35
ConfigGroup,_Channel_EPI,RICM tests,CSUW1-Filter Wheel,Label,EMPTY
ConfigGroup,_Channel_EPI,RICM tests,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channel_EPI,RICM tests,CSUW1-Bright Field,BrightFieldPort,Confocal
ConfigGroup,_Channel_EPI,RICM tests,Core,Camera,Left-EMCCD
ConfigGroup,_Channel_EPI,RICM tests,Core,Focus,TIZDrive
ConfigGroup,_Channel_EPI,RICM tests,Core,Shutter,Shutter-B
ConfigGroup,_Channel_EPI,RICM tests,Evolve-Filter-Wheel,Label,ANALYYZER
ConfigGroup,_Channel_EPI,RICM tests,Left-EMCCD,Gain,2

# Preset: EPI-SQ-UV
ConfigGroup,_Channel_EPI,EPI-SQ-UV,TIFilterBlockBottom,Label,6------
ConfigGroup,_Channel_EPI,EPI-SQ-UV,TIFilterBlockTop,Label,3------
ConfigGroup,_Channel_EPI,EPI-SQ-UV,TILightPath,Label,2-Left100
ConfigGroup,_Channel_EPI,EPI-SQ-UV,TITIRF,Mirror,Out
ConfigGroup,_Channel_EPI,EPI-SQ-UV,Excitation,Label,350/20
ConfigGroup,_Channel_EPI,EPI-SQ-UV,Evolve-Filter-Wheel,Label,EMPTY
ConfigGroup,_Channel_EPI,EPI-SQ-UV,CSUW1-Filter Wheel,Label,FULL
ConfigGroup,_Channel_EPI,EPI-SQ-UV,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channel_EPI,EPI-SQ-UV,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channel_EPI,EPI-SQ-UV,Core,Camera,Left-EMCCD
ConfigGroup,_Channel_EPI,EPI-SQ-UV,Core,Focus,TIZDrive
ConfigGroup,_Channel_EPI,EPI-SQ-UV,Core,Shutter,Shutter-B
ConfigGroup,_Channel_EPI,EPI-SQ-UV,Left-EMCCD,Gain,2


# Group: ___561 Laser Power
# Preset: NewPreset
ConfigGroup,___561 Laser Power,NewPreset,561 Power,Volts,0.0000


# Group: ________Epifluor Excitation Wheel
# Preset: 650-20
ConfigGroup,________Epifluor Excitation Wheel,650-20,Excitation,Label,650/20

# Preset: 350-20
ConfigGroup,________Epifluor Excitation Wheel,350-20,Excitation,Label,350/20

# Preset: 572-35
ConfigGroup,________Epifluor Excitation Wheel,572-35,Excitation,Label,572/35

# Preset: 500-20
ConfigGroup,________Epifluor Excitation Wheel,500-20,Excitation,Label,500/20

# Preset: EMPTY
ConfigGroup,________Epifluor Excitation Wheel,EMPTY,Excitation,Label,EMPTY

# Preset: FULL
ConfigGroup,________Epifluor Excitation Wheel,FULL,Excitation,Label,FULL

# Preset: 470-40
ConfigGroup,________Epifluor Excitation Wheel,470-40,Excitation,Label,470/40

# Preset: 430-24
ConfigGroup,________Epifluor Excitation Wheel,430-24,Excitation,Label,430/24


# Group: ___514 Laser Power
# Preset: NewPreset
ConfigGroup,___514 Laser Power,NewPreset,514 Power,Volts,0.0000


# Group: _Evolve
# Preset: TIRF 561
ConfigGroup,_Evolve,TIRF 561,TIFilterBlockBottom,Label,3 - 405/488/560/650  TIRF
ConfigGroup,_Evolve,TIRF 561,TIFilterBlockTop,Label,3------
ConfigGroup,_Evolve,TIRF 561,TILightPath,Label,3-Right100
ConfigGroup,_Evolve,TIRF 561,TITIRF,Mirror,In
ConfigGroup,_Evolve,TIRF 561,Excitation,Label,572/35
ConfigGroup,_Evolve,TIRF 561,Shutter-A,State,0
ConfigGroup,_Evolve,TIRF 561,Shutter-B,State,0
ConfigGroup,_Evolve,TIRF 561,405 Shutter,State,0
ConfigGroup,_Evolve,TIRF 561,440 Shutter,State,0
ConfigGroup,_Evolve,TIRF 561,488 Shutter,State,0
ConfigGroup,_Evolve,TIRF 561,514 Shutter,State,0
ConfigGroup,_Evolve,TIRF 561,561 Shutter,State,1
ConfigGroup,_Evolve,TIRF 561,Port Switcher line 1,State,0
ConfigGroup,_Evolve,TIRF 561,Port Switcher line 2,State,0
ConfigGroup,_Evolve,TIRF 561,Core,Camera,Right-EMCCD

# Preset: TIRF 488
ConfigGroup,_Evolve,TIRF 488,TIFilterBlockBottom,Label,3 - 405/488/560/650  TIRF
ConfigGroup,_Evolve,TIRF 488,TIFilterBlockTop,Label,3------
ConfigGroup,_Evolve,TIRF 488,TILightPath,Label,3-Right100
ConfigGroup,_Evolve,TIRF 488,TITIRF,Mirror,In
ConfigGroup,_Evolve,TIRF 488,Excitation,Label,470/40
ConfigGroup,_Evolve,TIRF 488,Shutter-A,State,0
ConfigGroup,_Evolve,TIRF 488,Shutter-B,State,0
ConfigGroup,_Evolve,TIRF 488,405 Shutter,State,0
ConfigGroup,_Evolve,TIRF 488,440 Shutter,State,0
ConfigGroup,_Evolve,TIRF 488,488 Shutter,State,1
ConfigGroup,_Evolve,TIRF 488,514 Shutter,State,0
ConfigGroup,_Evolve,TIRF 488,561 Shutter,State,0
ConfigGroup,_Evolve,TIRF 488,Port Switcher line 1,State,0
ConfigGroup,_Evolve,TIRF 488,Port Switcher line 2,State,0
ConfigGroup,_Evolve,TIRF 488,Core,Camera,Right-EMCCD

# Preset: TIRF 440
ConfigGroup,_Evolve,TIRF 440,TIFilterBlockBottom,Label,4 - 440/514/561 TIRF
ConfigGroup,_Evolve,TIRF 440,TIFilterBlockTop,Label,3------
ConfigGroup,_Evolve,TIRF 440,TILightPath,Label,3-Right100
ConfigGroup,_Evolve,TIRF 440,TITIRF,Mirror,In
ConfigGroup,_Evolve,TIRF 440,Excitation,Label,470/40
ConfigGroup,_Evolve,TIRF 440,Shutter-A,State,0
ConfigGroup,_Evolve,TIRF 440,Shutter-B,State,0
ConfigGroup,_Evolve,TIRF 440,405 Shutter,State,0
ConfigGroup,_Evolve,TIRF 440,440 Shutter,State,1
ConfigGroup,_Evolve,TIRF 440,488 Shutter,State,0
ConfigGroup,_Evolve,TIRF 440,514 Shutter,State,0
ConfigGroup,_Evolve,TIRF 440,561 Shutter,State,0
ConfigGroup,_Evolve,TIRF 440,Port Switcher line 1,State,0
ConfigGroup,_Evolve,TIRF 440,Port Switcher line 2,State,0
ConfigGroup,_Evolve,TIRF 440,Core,Camera,Right-EMCCD

# Preset: dummy TIRF CYR
ConfigGroup,_Evolve,dummy TIRF CYR,TIFilterBlockBottom,Label,4 - 440/514/561 TIRF
ConfigGroup,_Evolve,dummy TIRF CYR,TIFilterBlockTop,Label,3------
ConfigGroup,_Evolve,dummy TIRF CYR,TILightPath,Label,3-Right100
ConfigGroup,_Evolve,dummy TIRF CYR,TITIRF,Mirror,In
ConfigGroup,_Evolve,dummy TIRF CYR,Excitation,Label,EMPTY
ConfigGroup,_Evolve,dummy TIRF CYR,Shutter-A,State,0
ConfigGroup,_Evolve,dummy TIRF CYR,Shutter-B,State,0
ConfigGroup,_Evolve,dummy TIRF CYR,405 Shutter,State,0
ConfigGroup,_Evolve,dummy TIRF CYR,440 Shutter,State,0
ConfigGroup,_Evolve,dummy TIRF CYR,488 Shutter,State,0
ConfigGroup,_Evolve,dummy TIRF CYR,514 Shutter,State,0
ConfigGroup,_Evolve,dummy TIRF CYR,561 Shutter,State,0
ConfigGroup,_Evolve,dummy TIRF CYR,Port Switcher line 1,State,0
ConfigGroup,_Evolve,dummy TIRF CYR,Port Switcher line 2,State,0
ConfigGroup,_Evolve,dummy TIRF CYR,Core,Camera,Right-EMCCD

# Preset: dummy TIRF BGR
ConfigGroup,_Evolve,dummy TIRF BGR,TIFilterBlockBottom,Label,3 - 405/488/560/650  TIRF
ConfigGroup,_Evolve,dummy TIRF BGR,TIFilterBlockTop,Label,3------
ConfigGroup,_Evolve,dummy TIRF BGR,TILightPath,Label,3-Right100
ConfigGroup,_Evolve,dummy TIRF BGR,TITIRF,Mirror,In
ConfigGroup,_Evolve,dummy TIRF BGR,Excitation,Label,EMPTY
ConfigGroup,_Evolve,dummy TIRF BGR,Shutter-A,State,0
ConfigGroup,_Evolve,dummy TIRF BGR,Shutter-B,State,0
ConfigGroup,_Evolve,dummy TIRF BGR,405 Shutter,State,0
ConfigGroup,_Evolve,dummy TIRF BGR,440 Shutter,State,0
ConfigGroup,_Evolve,dummy TIRF BGR,488 Shutter,State,0
ConfigGroup,_Evolve,dummy TIRF BGR,514 Shutter,State,0
ConfigGroup,_Evolve,dummy TIRF BGR,561 Shutter,State,0
ConfigGroup,_Evolve,dummy TIRF BGR,Port Switcher line 1,State,0
ConfigGroup,_Evolve,dummy TIRF BGR,Port Switcher line 2,State,0
ConfigGroup,_Evolve,dummy TIRF BGR,Core,Camera,Right-EMCCD

# Preset: TIRF 514
ConfigGroup,_Evolve,TIRF 514,TIFilterBlockBottom,Label,4 - 440/514/561 TIRF
ConfigGroup,_Evolve,TIRF 514,TIFilterBlockTop,Label,3------
ConfigGroup,_Evolve,TIRF 514,TILightPath,Label,3-Right100
ConfigGroup,_Evolve,TIRF 514,TITIRF,Mirror,In
ConfigGroup,_Evolve,TIRF 514,Excitation,Label,500/20
ConfigGroup,_Evolve,TIRF 514,Shutter-A,State,0
ConfigGroup,_Evolve,TIRF 514,Shutter-B,State,0
ConfigGroup,_Evolve,TIRF 514,405 Shutter,State,0
ConfigGroup,_Evolve,TIRF 514,440 Shutter,State,0
ConfigGroup,_Evolve,TIRF 514,488 Shutter,State,0
ConfigGroup,_Evolve,TIRF 514,514 Shutter,State,1
ConfigGroup,_Evolve,TIRF 514,561 Shutter,State,0
ConfigGroup,_Evolve,TIRF 514,Port Switcher line 1,State,0
ConfigGroup,_Evolve,TIRF 514,Port Switcher line 2,State,0
ConfigGroup,_Evolve,TIRF 514,Core,Camera,Right-EMCCD

# Preset: TIRF 405
ConfigGroup,_Evolve,TIRF 405,TIFilterBlockBottom,Label,3 - 405/488/560/650  TIRF
ConfigGroup,_Evolve,TIRF 405,TIFilterBlockTop,Label,3------
ConfigGroup,_Evolve,TIRF 405,TILightPath,Label,3-Right100
ConfigGroup,_Evolve,TIRF 405,TITIRF,Mirror,In
ConfigGroup,_Evolve,TIRF 405,Excitation,Label,430/24
ConfigGroup,_Evolve,TIRF 405,Shutter-A,State,0
ConfigGroup,_Evolve,TIRF 405,Shutter-B,State,0
ConfigGroup,_Evolve,TIRF 405,405 Shutter,State,1
ConfigGroup,_Evolve,TIRF 405,440 Shutter,State,0
ConfigGroup,_Evolve,TIRF 405,488 Shutter,State,0
ConfigGroup,_Evolve,TIRF 405,514 Shutter,State,0
ConfigGroup,_Evolve,TIRF 405,561 Shutter,State,0
ConfigGroup,_Evolve,TIRF 405,Port Switcher line 1,State,0
ConfigGroup,_Evolve,TIRF 405,Port Switcher line 2,State,0
ConfigGroup,_Evolve,TIRF 405,Core,Camera,Right-EMCCD


# Group: ___405 Laser Power
# Preset: NewPreset
ConfigGroup,___405 Laser Power,NewPreset,405 Power,Volts,0.0000


# Group: ______Focus Drive
# Preset: Stream Piezo Z
ConfigGroup,______Focus Drive,Stream Piezo Z,Core,Focus,Stream Piezo Z

# Preset: TIPFSOffset
ConfigGroup,______Focus Drive,TIPFSOffset,Core,Focus,TIPFSOffset

# Preset: TIZDrive
ConfigGroup,______Focus Drive,TIZDrive,Core,Focus,TIZDrive


# Group: ___440 Laser Power
# Preset: NewPreset
ConfigGroup,___440 Laser Power,NewPreset,440 Power,Volts,0.0000


# Group: __ANDOR-Cam_Binning
# Preset: 4
ConfigGroup,__ANDOR-Cam_Binning,4,Left-EMCCD,Binning,4

# Preset: 2
ConfigGroup,__ANDOR-Cam_Binning,2,Left-EMCCD,Binning,2

# Preset: 1
ConfigGroup,__ANDOR-Cam_Binning,1,Left-EMCCD,Binning,1

# Preset: 8
ConfigGroup,__ANDOR-Cam_Binning,8,Left-EMCCD,Binning,8


# Group: _Channels_Confocal
# Preset: 488 CF 600LP
ConfigGroup,_Channels_Confocal,488 CF 600LP,TIFilterBlockBottom,Label,6------
ConfigGroup,_Channels_Confocal,488 CF 600LP,TIFilterBlockTop,Label,6 - 600 LP
ConfigGroup,_Channels_Confocal,488 CF 600LP,TILightPath,Label,2-Left100
ConfigGroup,_Channels_Confocal,488 CF 600LP,TITIRF,Mirror,Out
ConfigGroup,_Channels_Confocal,488 CF 600LP,Excitation,Label,EMPTY
ConfigGroup,_Channels_Confocal,488 CF 600LP,CSUW1-Filter Wheel,Label,525/50
ConfigGroup,_Channels_Confocal,488 CF 600LP,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_Channels_Confocal,488 CF 600LP,CSUW1-Bright Field,BrightFieldPort,Confocal
ConfigGroup,_Channels_Confocal,488 CF 600LP,Port Switcher line 1,State,1
ConfigGroup,_Channels_Confocal,488 CF 600LP,Port Switcher line 2,State,1
ConfigGroup,_Channels_Confocal,488 CF 600LP,Core,Camera,Left-EMCCD
ConfigGroup,_Channels_Confocal,488 CF 600LP,Core,Shutter,Laser 488 Shutter
ConfigGroup,_Channels_Confocal,488 CF 600LP,Left-EMCCD,Gain,2

# Preset: Conf DIA
ConfigGroup,_Channels_Confocal,Conf DIA,TIFilterBlockBottom,Label,1 - Analyzer
ConfigGroup,_Channels_Confocal,Conf DIA,TIFilterBlockTop,Label,3------
ConfigGroup,_Channels_Confocal,Conf DIA,TILightPath,Label,2-Left100
ConfigGroup,_Channels_Confocal,Conf DIA,CSUW1-Filter Wheel,Label,EMPTY
ConfigGroup,_Channels_Confocal,Conf DIA,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channels_Confocal,Conf DIA,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channels_Confocal,Conf DIA,Port Switcher line 1,State,1
ConfigGroup,_Channels_Confocal,Conf DIA,Port Switcher line 2,State,1
ConfigGroup,_Channels_Confocal,Conf DIA,Core,Camera,Left-EMCCD
ConfigGroup,_Channels_Confocal,Conf DIA,Core,Shutter,Shutter-A
ConfigGroup,_Channels_Confocal,Conf DIA,Excitation,Label,EMPTY
ConfigGroup,_Channels_Confocal,Conf DIA,TITIRF,Mirror,Out
ConfigGroup,_Channels_Confocal,Conf DIA,Left-EMCCD,Gain,2

# Preset: 561 CF
ConfigGroup,_Channels_Confocal,561 CF,TIFilterBlockBottom,Label,6------
ConfigGroup,_Channels_Confocal,561 CF,TIFilterBlockTop,Label,3------
ConfigGroup,_Channels_Confocal,561 CF,TILightPath,Label,2-Left100
ConfigGroup,_Channels_Confocal,561 CF,CSUW1-Filter Wheel,Label,620/60
ConfigGroup,_Channels_Confocal,561 CF,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_Channels_Confocal,561 CF,CSUW1-Bright Field,BrightFieldPort,Confocal
ConfigGroup,_Channels_Confocal,561 CF,Port Switcher line 1,State,1
ConfigGroup,_Channels_Confocal,561 CF,Port Switcher line 2,State,1
ConfigGroup,_Channels_Confocal,561 CF,Core,Camera,Left-EMCCD
ConfigGroup,_Channels_Confocal,561 CF,Core,Shutter,Laser 561 Shutter
ConfigGroup,_Channels_Confocal,561 CF,Excitation,Label,EMPTY
ConfigGroup,_Channels_Confocal,561 CF,TITIRF,Mirror,Out
ConfigGroup,_Channels_Confocal,561 CF,Left-EMCCD,Gain,300

# Preset: BLUE LED IN
ConfigGroup,_Channels_Confocal,BLUE LED IN,TIFilterBlockBottom,Label,6------
ConfigGroup,_Channels_Confocal,BLUE LED IN,TIFilterBlockTop,Label,5 - 488/561/650/750
ConfigGroup,_Channels_Confocal,BLUE LED IN,TILightPath,Label,2-Left100
ConfigGroup,_Channels_Confocal,BLUE LED IN,CSUW1-Filter Wheel,Label,620/60
ConfigGroup,_Channels_Confocal,BLUE LED IN,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_Channels_Confocal,BLUE LED IN,CSUW1-Bright Field,BrightFieldPort,Confocal
ConfigGroup,_Channels_Confocal,BLUE LED IN,Port Switcher line 1,State,1
ConfigGroup,_Channels_Confocal,BLUE LED IN,Port Switcher line 2,State,1
ConfigGroup,_Channels_Confocal,BLUE LED IN,Core,Camera,Left-EMCCD
ConfigGroup,_Channels_Confocal,BLUE LED IN,Core,Shutter,Laser 561 Shutter
ConfigGroup,_Channels_Confocal,BLUE LED IN,Excitation,Label,EMPTY
ConfigGroup,_Channels_Confocal,BLUE LED IN,TITIRF,Mirror,In
ConfigGroup,_Channels_Confocal,BLUE LED IN,Left-EMCCD,Gain,2

# Preset: 440 CF
ConfigGroup,_Channels_Confocal,440 CF,TIFilterBlockBottom,Label,6------
ConfigGroup,_Channels_Confocal,440 CF,TIFilterBlockTop,Label,3------
ConfigGroup,_Channels_Confocal,440 CF,TILightPath,Label,2-Left100
ConfigGroup,_Channels_Confocal,440 CF,CSUW1-Filter Wheel,Label,480/40
ConfigGroup,_Channels_Confocal,440 CF,CSUW1-Dichroic Mirror,Label,TRIPLE
ConfigGroup,_Channels_Confocal,440 CF,CSUW1-Bright Field,BrightFieldPort,Confocal
ConfigGroup,_Channels_Confocal,440 CF,Port Switcher line 1,State,1
ConfigGroup,_Channels_Confocal,440 CF,Port Switcher line 2,State,1
ConfigGroup,_Channels_Confocal,440 CF,Core,Camera,Left-EMCCD
ConfigGroup,_Channels_Confocal,440 CF,Core,Shutter,Laser 440 Shutter
ConfigGroup,_Channels_Confocal,440 CF,Excitation,Label,EMPTY
ConfigGroup,_Channels_Confocal,440 CF,TITIRF,Mirror,Out
ConfigGroup,_Channels_Confocal,440 CF,Left-EMCCD,Gain,300

# Preset: Cy3 Cy5 FRET
ConfigGroup,_Channels_Confocal,Cy3 Cy5 FRET,TIFilterBlockBottom,Label,3 - 405/488/560/650  TIRF
ConfigGroup,_Channels_Confocal,Cy3 Cy5 FRET,TIFilterBlockTop,Label,3------
ConfigGroup,_Channels_Confocal,Cy3 Cy5 FRET,TILightPath,Label,2-Left100
ConfigGroup,_Channels_Confocal,Cy3 Cy5 FRET,CSUW1-Filter Wheel,Label,EMPTY
ConfigGroup,_Channels_Confocal,Cy3 Cy5 FRET,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channels_Confocal,Cy3 Cy5 FRET,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channels_Confocal,Cy3 Cy5 FRET,Port Switcher line 1,State,1
ConfigGroup,_Channels_Confocal,Cy3 Cy5 FRET,Port Switcher line 2,State,1
ConfigGroup,_Channels_Confocal,Cy3 Cy5 FRET,Core,Camera,Left-EMCCD
ConfigGroup,_Channels_Confocal,Cy3 Cy5 FRET,Core,Shutter,Shutter-B
ConfigGroup,_Channels_Confocal,Cy3 Cy5 FRET,Excitation,Label,572/35
ConfigGroup,_Channels_Confocal,Cy3 Cy5 FRET,TITIRF,Mirror,Out
ConfigGroup,_Channels_Confocal,Cy3 Cy5 FRET,Left-EMCCD,Gain,2

# Preset: 405 CF
ConfigGroup,_Channels_Confocal,405 CF,TIFilterBlockBottom,Label,6------
ConfigGroup,_Channels_Confocal,405 CF,TIFilterBlockTop,Label,3------
ConfigGroup,_Channels_Confocal,405 CF,TILightPath,Label,2-Left100
ConfigGroup,_Channels_Confocal,405 CF,CSUW1-Filter Wheel,Label,450/50
ConfigGroup,_Channels_Confocal,405 CF,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_Channels_Confocal,405 CF,CSUW1-Bright Field,BrightFieldPort,Confocal
ConfigGroup,_Channels_Confocal,405 CF,Port Switcher line 1,State,1
ConfigGroup,_Channels_Confocal,405 CF,Port Switcher line 2,State,1
ConfigGroup,_Channels_Confocal,405 CF,Core,Camera,Left-EMCCD
ConfigGroup,_Channels_Confocal,405 CF,Core,Shutter,Laser 405 Shutter
ConfigGroup,_Channels_Confocal,405 CF,Excitation,Label,EMPTY
ConfigGroup,_Channels_Confocal,405 CF,TITIRF,Mirror,Out
ConfigGroup,_Channels_Confocal,405 CF,Left-EMCCD,Gain,250

# Preset: 514 CF
ConfigGroup,_Channels_Confocal,514 CF,TIFilterBlockBottom,Label,6------
ConfigGroup,_Channels_Confocal,514 CF,TIFilterBlockTop,Label,3------
ConfigGroup,_Channels_Confocal,514 CF,TILightPath,Label,2-Left100
ConfigGroup,_Channels_Confocal,514 CF,CSUW1-Filter Wheel,Label,535/30
ConfigGroup,_Channels_Confocal,514 CF,CSUW1-Dichroic Mirror,Label,TRIPLE
ConfigGroup,_Channels_Confocal,514 CF,CSUW1-Bright Field,BrightFieldPort,Confocal
ConfigGroup,_Channels_Confocal,514 CF,Port Switcher line 1,State,1
ConfigGroup,_Channels_Confocal,514 CF,Port Switcher line 2,State,1
ConfigGroup,_Channels_Confocal,514 CF,Core,Camera,Left-EMCCD
ConfigGroup,_Channels_Confocal,514 CF,Core,Shutter,Laser 514 Shutter
ConfigGroup,_Channels_Confocal,514 CF,Excitation,Label,EMPTY
ConfigGroup,_Channels_Confocal,514 CF,TITIRF,Mirror,Out
ConfigGroup,_Channels_Confocal,514 CF,Left-EMCCD,Gain,300

# Preset: 488 CF
ConfigGroup,_Channels_Confocal,488 CF,TIFilterBlockBottom,Label,5------
ConfigGroup,_Channels_Confocal,488 CF,TIFilterBlockTop,Label,3------
ConfigGroup,_Channels_Confocal,488 CF,TILightPath,Label,2-Left100
ConfigGroup,_Channels_Confocal,488 CF,CSUW1-Filter Wheel,Label,525/50
ConfigGroup,_Channels_Confocal,488 CF,CSUW1-Bright Field,BrightFieldPort,Confocal
ConfigGroup,_Channels_Confocal,488 CF,Port Switcher line 1,State,1
ConfigGroup,_Channels_Confocal,488 CF,Port Switcher line 2,State,1
ConfigGroup,_Channels_Confocal,488 CF,Core,Camera,Left-EMCCD
ConfigGroup,_Channels_Confocal,488 CF,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_Channels_Confocal,488 CF,Core,Shutter,Laser 488 Shutter
ConfigGroup,_Channels_Confocal,488 CF,Excitation,Label,EMPTY
ConfigGroup,_Channels_Confocal,488 CF,TITIRF,Mirror,Out
ConfigGroup,_Channels_Confocal,488 CF,Left-EMCCD,Gain,300

# Preset: 405 CF 600LP
ConfigGroup,_Channels_Confocal,405 CF 600LP,TIFilterBlockBottom,Label,6------
ConfigGroup,_Channels_Confocal,405 CF 600LP,TIFilterBlockTop,Label,6 - 600 LP
ConfigGroup,_Channels_Confocal,405 CF 600LP,TILightPath,Label,2-Left100
ConfigGroup,_Channels_Confocal,405 CF 600LP,TITIRF,Mirror,Out
ConfigGroup,_Channels_Confocal,405 CF 600LP,Excitation,Label,EMPTY
ConfigGroup,_Channels_Confocal,405 CF 600LP,CSUW1-Filter Wheel,Label,450/50
ConfigGroup,_Channels_Confocal,405 CF 600LP,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_Channels_Confocal,405 CF 600LP,CSUW1-Bright Field,BrightFieldPort,Confocal
ConfigGroup,_Channels_Confocal,405 CF 600LP,Port Switcher line 1,State,1
ConfigGroup,_Channels_Confocal,405 CF 600LP,Port Switcher line 2,State,1
ConfigGroup,_Channels_Confocal,405 CF 600LP,Core,Camera,Left-EMCCD
ConfigGroup,_Channels_Confocal,405 CF 600LP,Core,Shutter,Laser 405 Shutter
ConfigGroup,_Channels_Confocal,405 CF 600LP,Left-EMCCD,Gain,2

# Preset: Cy5 epi
ConfigGroup,_Channels_Confocal,Cy5 epi,TIFilterBlockBottom,Label,5------
ConfigGroup,_Channels_Confocal,Cy5 epi,TIFilterBlockTop,Label,1 - 488
ConfigGroup,_Channels_Confocal,Cy5 epi,TILightPath,Label,2-Left100
ConfigGroup,_Channels_Confocal,Cy5 epi,CSUW1-Filter Wheel,Label,EMPTY
ConfigGroup,_Channels_Confocal,Cy5 epi,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,_Channels_Confocal,Cy5 epi,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Channels_Confocal,Cy5 epi,Port Switcher line 1,State,1
ConfigGroup,_Channels_Confocal,Cy5 epi,Port Switcher line 2,State,1
ConfigGroup,_Channels_Confocal,Cy5 epi,Core,Camera,Left-EMCCD
ConfigGroup,_Channels_Confocal,Cy5 epi,Core,Shutter,Shutter-B
ConfigGroup,_Channels_Confocal,Cy5 epi,Excitation,Label,EMPTY
ConfigGroup,_Channels_Confocal,Cy5 epi,TITIRF,Mirror,In
ConfigGroup,_Channels_Confocal,Cy5 epi,Left-EMCCD,Gain,2


# Group: ________Confocal Emission Wheel
# Preset: 480-40
ConfigGroup,________Confocal Emission Wheel,480-40,CSUW1-Filter Wheel,Label,480/40

# Preset: 405-488-561-635
ConfigGroup,________Confocal Emission Wheel,405-488-561-635,CSUW1-Filter Wheel,Label,405/488/561/635

# Preset: 525-50
ConfigGroup,________Confocal Emission Wheel,525-50,CSUW1-Filter Wheel,Label,525/50

# Preset: EMPTY
ConfigGroup,________Confocal Emission Wheel,EMPTY,CSUW1-Filter Wheel,Label,FULL

# Preset: FULL
ConfigGroup,________Confocal Emission Wheel,FULL,CSUW1-Filter Wheel,Label,FULL

# Preset: 620-60
ConfigGroup,________Confocal Emission Wheel,620-60,CSUW1-Filter Wheel,Label,620/60

# Preset: 535-30
ConfigGroup,________Confocal Emission Wheel,535-30,CSUW1-Filter Wheel,Label,535/30

# Preset: 450-50
ConfigGroup,________Confocal Emission Wheel,450-50,CSUW1-Filter Wheel,Label,450/50

# Preset: 442-514-568
ConfigGroup,________Confocal Emission Wheel,442-514-568,CSUW1-Filter Wheel,Label,442/514/568



# PixelSize settings
# Resolution preset: evolve 60x
ConfigPixelSize,evolve 60x,TINosePiece,Label,4-Apo TIRF 60x NA 1.49 Oil
PixelSize_um,evolve 60x,0.2664
ConfigPixelSize,evolve 60x,Core,Camera,Right-EMCCD
PixelSize_um,evolve 60x,0.2664

# Resolution preset: andor 20x
ConfigPixelSize,andor 20x,TINosePiece,Label,2-Plan Apo 20x NA 0.75 Dry
PixelSize_um,andor 20x,0.6518
ConfigPixelSize,andor 20x,Core,Camera,Left-EMCCD
PixelSize_um,andor 20x,0.6518

# Resolution preset: andor 10x
ConfigPixelSize,andor 10x,TINosePiece,Label,1-Plan Fluor 10x NA 0.30 Dry
PixelSize_um,andor 10x,1.3076
ConfigPixelSize,andor 10x,Core,Camera,Left-EMCCD
PixelSize_um,andor 10x,1.3076

# Resolution preset: 100x
ConfigPixelSize,100x,TINosePiece,Label,5-Apo TIRF 100x NA 1.49 Oil
PixelSize_um,100x,0.2611
ConfigPixelSize,100x,Core,Camera,Left-EMCCD
PixelSize_um,100x,0.2611


